############################################################
# Microscope Configuration File                            #
# Generated by YouScope 2.2.0                                #
# Compatible with Micro-Manager 1.4/2.0.0                  #
# Created: Mon Jun 20 17:45:10 CEST 2022                   #
# Visit www.youscope.org                                   #
############################################################

# Identification of how and for which machines this configuration was created.
# Do not remove or edit the following lines.
#@Generator,YouScope,2.2.0
#@Compatible,YouScope,1.0
#@Compatible,MicroManager,1.3
#@Compatible,MicroManager,1.4
#@Compatible,MicroManager,2.0.0

# Reset the microscope.
# Do not remove or edit this line, or change its location.
Property,Core,Initialize,0

# Devices declaration.
Device,COM3,SerialManager,COM3
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,LightEngine,Lumencor,LightEngine
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,FilterTurret2,NikonTi2,FilterTurret2
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,DiaLamp,NikonTi2,DiaLamp
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,Turret2Shutter,NikonTi2,Turret2Shutter

# Pre-initialization settings.
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,LightEngine,Connection,192.168.201.200
Property,LightEngine,Model,GEN3
# Hubs/Parent devices.
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,FilterTurret2,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,DiaLamp,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,Turret2Shutter,Ti2-E__0

# Initialize the microscope.
# Do not remove or edit this line, or change its location.
Property,Core,Initialize,1

# Explicit delays (in ms).
Delay,FilterTurret1,250.0
Delay,FilterTurret2,250.0
Delay,HamamatsuHam_DCAM,10.0
Delay,Turret1Shutter,10.0
Delay,Turret2Shutter,10.0

# Standard devices ("Roles").
Property,Core,AutoFocus,PFS
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,LightEngine
Property,Core,Focus,ZDrive
Property,Core,XYStage,XYStage

# Devices to which imaging process is synchronized.
ImageSynchro,FilterTurret1
ImageSynchro,FilterTurret2
ImageSynchro,Nosepiece
ImageSynchro,PFS
ImageSynchro,PFSOffset
ImageSynchro,Turret1Shutter
ImageSynchro,Turret2Shutter
ImageSynchro,XYStage
ImageSynchro,ZDrive

# State labels for device CondenserTurret.
Label,CondenserTurret,0,1-Ph1
Label,CondenserTurret,1,2-Ph2
Label,CondenserTurret,2,3-Ph3
Label,CondenserTurret,3,4-
Label,CondenserTurret,4,5-
Label,CondenserTurret,5,6-Shutter
Label,CondenserTurret,6,7-OPEN

# State labels for device FilterTurret1.
Label,FilterTurret1,0,1-460/50-DAPI
Label,FilterTurret1,1,2-520/35-GFP
Label,FilterTurret1,2,3-483/32-CFP
Label,FilterTurret1,3,4-543/22-YFP
Label,FilterTurret1,4,5-692/40-Cy5
Label,FilterTurret1,5,6-600/32-Cy3

# State labels for device FilterTurret2.
Label,FilterTurret2,0,1-Empty
Label,FilterTurret2,1,2-50/50
Label,FilterTurret2,2,3-Empty
Label,FilterTurret2,3,4-Empty
Label,FilterTurret2,4,5-Empty
Label,FilterTurret2,5,6-Empty

# State labels for device LightPath.
Label,LightPath,0,1-EYE
Label,LightPath,1,2-R100
Label,LightPath,2,3-AUX
Label,LightPath,3,4-L100

# State labels for device Nosepiece.
Label,Nosepiece,0,1-S Plan Fluor 20x
Label,Nosepiece,1,2-Plan Fluor 40x Oil
Label,Nosepiece,2,3-Plan Apo Lmbd 60x Oil
Label,Nosepiece,3,4-Plan Apo Lmbd 100x Oil
Label,Nosepiece,4,5-
Label,Nosepiece,5,6-

# Communication timeout (ms).
ConfigGroup,System,Startup,Core,TimeoutMs,30000

# Axes direction settings of stages.
# Stage XYStage.
ConfigGroup,System,Startup,XYStage,TransposeMirrorX,0
ConfigGroup,System,Startup,XYStage,TransposeMirrorY,0

# Axes direction settings of cameras.
# Axes direction settings of camera HamamatsuHam_DCAM.
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeMirrorX,0
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeMirrorY,1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeXY,1

# Startup settings (executed when config file loads).
ConfigGroup,System,Startup,HamamatsuHam_DCAM,EXPOSURE FULL RANGE,ENABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],TRIGGER READY
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Shutdown settings (executed when config file loads).
ConfigGroup,System,Shutdown,ZDrive,Position,0

# Channel Channels.brightfield
ConfigGroup,Channels,brightfield_on,LightPath,Label,4-L100
ConfigGroup,Channels,brightfield_on,FilterTurret1,Label,4-543/22-YFP
ConfigGroup,Channels,brightfield_on,FilterTurret2,Label,1-Empty
ConfigGroup,Channels,brightfield_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Channels,brightfield_on,DiaLamp,Intensity,84
ConfigGroup,Channels,brightfield_on,Turret1Shutter,State,0
ConfigGroup,Channels,brightfield_on,Turret2Shutter,State,0
ConfigGroup,Channels,brightfield_on,CondenserTurret,Label,7-OPEN
ConfigGroup,Channels,brightfield_off,DiaLamp,State,0
ConfigGroup,Channels,brightfield_on,Core,AutoShutter,1
ConfigGroup,Channels,brightfield_on,Core,Shutter,DiaLamp

# Channel Trigger.CFP
ConfigGroup,Trigger,CFP_on,LightPath,Label,4-L100
ConfigGroup,Trigger,CFP_on,FilterTurret1,Label,3-483/32-CFP
ConfigGroup,Trigger,CFP_on,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,CFP_on,LightEngine,BLUE_Intensity,250
ConfigGroup,Trigger,CFP_on,LightEngine,BLUE,1
ConfigGroup,Trigger,CFP_on,Turret1Shutter,State,1
ConfigGroup,Trigger,CFP_on,Turret2Shutter,State,0
ConfigGroup,Trigger,CFP_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,CFP_on,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,CFP_off,LightEngine,BLUE,0
ConfigGroup,Trigger,CFP_on,Core,AutoShutter,1
ConfigGroup,Trigger,CFP_on,Core,Shutter,LightEngine

# Channel Trigger.Cy3
ConfigGroup,Trigger,Cy3_on,LightPath,Label,4-L100
ConfigGroup,Trigger,Cy3_on,FilterTurret1,Label,6-600/32-Cy3
ConfigGroup,Trigger,Cy3_on,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,Cy3_on,LightEngine,GREEN_Intensity,200
ConfigGroup,Trigger,Cy3_on,LightEngine,GREEN,1
ConfigGroup,Trigger,Cy3_on,Turret1Shutter,State,1
ConfigGroup,Trigger,Cy3_on,Turret2Shutter,State,0
ConfigGroup,Trigger,Cy3_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,Cy3_on,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,Cy3_off,LightEngine,GREEN,0
ConfigGroup,Trigger,Cy3_on,Core,AutoShutter,1
ConfigGroup,Trigger,Cy3_on,Core,Shutter,LightEngine

# Channel Trigger.Cy5
ConfigGroup,Trigger,Cy5_on,LightPath,Label,4-L100
ConfigGroup,Trigger,Cy5_on,FilterTurret1,Label,5-692/40-Cy5
ConfigGroup,Trigger,Cy5_on,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,Cy5_on,LightEngine,RED_Intensity,250
ConfigGroup,Trigger,Cy5_on,LightEngine,RED,1
ConfigGroup,Trigger,Cy5_on,Turret1Shutter,State,1
ConfigGroup,Trigger,Cy5_on,Turret2Shutter,State,0
ConfigGroup,Trigger,Cy5_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,Cy5_on,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,Cy5_off,LightEngine,RED,0
ConfigGroup,Trigger,Cy5_on,Core,AutoShutter,1
ConfigGroup,Trigger,Cy5_on,Core,Shutter,LightEngine

# Channel Trigger.DAPI
ConfigGroup,Trigger,DAPI_on,LightPath,Label,4-L100
ConfigGroup,Trigger,DAPI_on,FilterTurret1,Label,1-460/50-DAPI
ConfigGroup,Trigger,DAPI_on,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,DAPI_on,LightEngine,VIOLET_Intensity,500
ConfigGroup,Trigger,DAPI_on,LightEngine,VIOLET,1
ConfigGroup,Trigger,DAPI_on,Turret1Shutter,State,1
ConfigGroup,Trigger,DAPI_on,Turret2Shutter,State,0
ConfigGroup,Trigger,DAPI_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,DAPI_on,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,DAPI_off,LightEngine,VIOLET,0
ConfigGroup,Trigger,DAPI_on,Core,AutoShutter,1
ConfigGroup,Trigger,DAPI_on,Core,Shutter,DiaLamp

# Channel Trigger.GFP
ConfigGroup,Trigger,GFP_on,LightPath,Label,4-L100
ConfigGroup,Trigger,GFP_on,FilterTurret1,Label,2-520/35-GFP
ConfigGroup,Trigger,GFP_on,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,GFP_on,LightEngine,BLUE_Intensity,200
ConfigGroup,Trigger,GFP_on,LightEngine,BLUE,1
ConfigGroup,Trigger,GFP_on,Turret1Shutter,State,1
ConfigGroup,Trigger,GFP_on,Turret2Shutter,State,0
ConfigGroup,Trigger,GFP_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,GFP_on,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,GFP_off,LightEngine,BLUE,0
ConfigGroup,Trigger,GFP_on,Core,AutoShutter,1
ConfigGroup,Trigger,GFP_on,Core,Shutter,DiaLamp

# Channel Trigger.LUC
ConfigGroup,Trigger,LUC,LightPath,Label,4-L100
ConfigGroup,Trigger,LUC,FilterTurret1,Label,1-460/50-DAPI
ConfigGroup,Trigger,LUC,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,LUC,Turret1Shutter,State,1
ConfigGroup,Trigger,LUC,Turret2Shutter,State,0
ConfigGroup,Trigger,LUC,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,LUC,HamamatsuHam_DCAM,Binning,4x4
ConfigGroup,Trigger,LUC,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,LUC,Core,AutoShutter,1
ConfigGroup,Trigger,LUC,Core,Shutter,LightEngine

# Channel Trigger.YFP
ConfigGroup,Trigger,YFP_on,LightPath,Label,4-L100
ConfigGroup,Trigger,YFP_on,FilterTurret1,Label,4-543/22-YFP
ConfigGroup,Trigger,YFP_on,FilterTurret2,Label,1-Empty
ConfigGroup,Trigger,YFP_on,LightEngine,TEAL_Intensity,10
ConfigGroup,Trigger,YFP_on,LightEngine,TEAL,1
ConfigGroup,Trigger,YFP_on,Turret1Shutter,State,1
ConfigGroup,Trigger,YFP_on,Turret2Shutter,State,0
ConfigGroup,Trigger,YFP_on,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,Trigger,YFP_on,CondenserTurret,Label,6-Shutter
ConfigGroup,Trigger,YFP_off,LightEngine,TEAL,0
ConfigGroup,Trigger,YFP_on,Core,AutoShutter,1
ConfigGroup,Trigger,YFP_on,Core,Shutter,LightEngine


